<PlusConfiguration version="2.5" PlusRevision="Plus-2.7.0.e4d528e1 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="OptiTrack Telemed flat marker coronal" Description="OptiTrack Duo and Telemed ultrasound." />
    
    <Device
      Id="TrackerDevice"
      LocalTimeOffsetSec="0.0"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker"
      ProjectFile="ScoliosisFlatMarkers2.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0">
      <DataSources>
        <DataSource Type="Tool" Id="Reference" />
        <DataSource Type="Tool" Id="Probe" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Type="Tool" Id="Reference" />
          <DataSource Type="Tool" Id="Probe" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    
    <Device
      Id="VideoDevice"
      LocalTimeOffsetSec="0.3"
      Type="TelemedVideo"
      DepthMm="90">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mhd"
      EnableCapturing="FALSE"
      EnableCompression="FALSE"
      FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        0.208517    0.0316779 -0.0147954 -25.6333 
       -0.00967117 -0.0337209 -0.208498  -66.4642 
       -0.0335985   0.206304  -0.0318077  93.3286 
        0 0 0 1 
        " />
    <Transform From="Image" To="TransdPixel"
      Matrix="
        1	0	0	-260
        0	1	0	-50
        0	0	1	0
        0	0	0	1" />
    <Transform From="TransdPixel" To="Transd"
      Matrix="
        0.208	0	0	0
        0	0.208	0	0
        0	0	0.208	0
        0	0	0	1" />
    <Transform From="Reference" To="Stylus"
      Matrix="
        1 0	0	0
        0	1	0	0
        0	0	1	0
        0	0	0	1" /> <!-- this is for ultrasound calibration -->
  </CoordinateDefinitions>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToTracker" />
        <Transform Name="ReferenceToTracker" />
        <Transform Name="ImageToTransd" />
        <Transform Name="TransdToReference" />
        <Transform Name="StylusToProbe" /> <!-- this is for ultrasound calibration -->
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
