<PlusConfiguration version="2.5" PlusRevision="Plus-2.7.0.e4d528e1 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="Spine scan Telemed OptiTrack" Description="OptiTrack Trio and Telemed ultrasound." />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker"
      ProjectFile="Spine.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0">
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Probe" />
		    <DataSource Type="Tool" Id="Reference" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Type="Tool" Id="Stylus" />
          <DataSource Type="Tool" Id="Probe" />
		      <DataSource Type="Tool" Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
	  Id="VideoDevice"
	  LocalTimeOffsetSec="0.0"
	  Type="TelemedVideo"
	  DepthMm="90">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mhd"
      EnableCapturing="FALSE"
      EnableCompression="FALSE"
      FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>
  
  <Transform From="Image" To="Probe"
      Matrix="
         0.184378 -0.0433156 -0.0202858 -52.3266 
        -0.0186914 0.00911175 -0.189342 -63.7447 
         0.0440271 0.185266 0.00456936 87.9794 
         0 0 0 1 " />
  
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToReference" />
		    <Transform Name="ImageToReference" />
		    <Transform Name="ProbeToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
		<Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
